<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:py="clr-namespace:Bonsai.Scripting.Python;assembly=Bonsai.Scripting.Python"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="fps" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>20</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Format">
        <Format>kalman_obj = KalmanFilter({0})</Format>
        <Selector>it</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Script" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:CreateRuntime">
          <py:PythonHome>../pyenv</py:PythonHome>
          <py:ScriptPath>Extensions\main.py</py:ScriptPath>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Exec">
          <py:Script>kalman_obj = KalmanFilter(20)</py:Script>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>81</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>BinaryInv</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea xsi:nil="true" />
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Set">
          <py:VariableName>it</py:VariableName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="py:Eval">
          <py:Expression>kalman_obj.predict(it.X, it.Y)</py:Expression>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="p1:GetFilteredEstimates" />
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="5" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>